Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } U U 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img7.png % %  L L 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img1.png % %  E E 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img6.png % %  N N 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img3.png % %  S S 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img8.png % %  G G 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img9.png % %  I I 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img2.png % %  O O 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img4.png % %  H H 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%203/img5.png % % // speller target properties
Application:Speller string TextToSpell= LINO // character or string to spell in offline copy mode